# Generated by Configurator on Sat Nov 08 17:53:25 CST 2014

# Reset
Property,Core,Initialize,0

# Devices
Device,COM1,SerialManager,COM1
Device,Andor,Andor,Andor
Device,PIXStage,PI_GCS,PIZStage
Device,PIYStage,PI_GCS,PIZStage
Device,PIZStage,PI_GCS,PIZStage

# Pre-init settings for devices
Property,Andor,Camera,| iXon | DU897_BV | 7001 |
Property,PIXStage,Axis,A
Property,PIXStage,Limit_um,15.0000
Property,PIXStage,Port,COM1
Property,PIYStage,Axis,B
Property,PIYStage,Limit_um,15.0000
Property,PIYStage,Port,COM1
Property,PIZStage,Axis,C
Property,PIZStage,Limit_um,10.0000
Property,PIZStage,Port,COM1

# Pre-init settings for COM ports
Property,COM1,AnswerTimeout,500.0000
Property,COM1,BaudRate,115200
Property,COM1,DelayBetweenCharsMs,0.0000
Property,COM1,Handshaking,Off
Property,COM1,Parity,None
Property,COM1,StopBits,1
Property,COM1,Verbose,1

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Roles
Property,Core,Camera,Andor
Property,Core,Focus,PIZStage
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: zPosition
# Preset: NewPreset
ConfigGroup,zPosition,NewPreset,PIZStage,Position,5.0020


# Group: EM
# Preset: NewPreset
ConfigGroup,EM,NewPreset,Andor,Gain,7


# Group: System
# Preset: Startup



# PixelSize settings

